opentrons/protocol-designer 8.4.4
schemaVersion: 8
protocolName: 080825 2 Joy Combined RTPCR TVasse 6samps
author: Tyler Vasse
robot: {model: OT-2 Standard, deckId: ot2_standard}
pipettes:
  p300_single_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labware:
  Opentrons OT-2 96 Filter Tip Rack 200 µL: {labwareDefURI: opentrons/opentrons_96_filtertiprack_200ul/1, location: 9}
  Opentrons OT-2 96 Filter Tip Rack 20 µL: {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 8}
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap: {labwareDefURI: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, location: 5}
  Individual PCR Tubes 96 Well Plate 200 µL: {labwareDefURI: custom_beta/individualpcrtubes_96_wellplate_200ul/1, location: 1}
  Opentrons 24 Tube Rack with 1.5mL Tall Tubes: {labwareDefURI: custom_beta/opentrons_24_tall_tubes/1, location: 4}
  Bio-Rad 96 Well Plate 200 µL PCR: {labwareDefURI: opentrons/biorad_96_wellplate_200ul_pcr/2, location: 2}
trashBinLocationUpdate:
  trashBin: cutout12
pipetteTiprackAssignments:
  p300_single_gen2: [opentrons/opentrons_96_filtertiprack_200ul/1]
  p20_single_gen2: [opentrons/opentrons_96_filtertiprack_20ul/1]
ingredients:
  - 5x miRCURY
  - PCR Grade Water
  - 10x miRCURY
  - Uni-Sp6
  - miRNA 100uM
  - 2x miRCURY
  - U6 primer mix
  - primer mix 2
  - Sample
  - gDNA Wipeout Buffer 7x
  - Quantiscript Reverse Transcriptase
  - RT Buffer
  - RT Primer Mix
  - 2x QuantiNOVA SYBR Green PCR MM
  - Proprietary Primers
  - IDT primers
ingredLocations:
  Opentrons 24 Tube Rack with 1.5mL Tall Tubes:
    gDNA Wipeout Buffer 7x {volume: 100}: A1
    PCR Grade Water {volume: 1000}: A2
    Quantiscript Reverse Transcriptase {volume: 100}: A3
    RT Buffer {volume: 100}: A4
    2x QuantiNOVA SYBR Green PCR MM {volume: 1000}: A6
    Proprietary Primers {volume: 1000}: B1, B2
    IDT primers {volume: 1000}: B3
  Individual PCR Tubes 96 Well Plate 200 µL:
    Sample {volume: 10}: D1-D6
savedStepForms:
- stepType: moveLiquid
  stepName: 16uL GDNA Wipeout Master Mix
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 16
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A1
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A1
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 2.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 88uL RNAse Free Water
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 88
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A2
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  aspirate_flowRate: 200
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A1
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 35
  dispense_mmFromBottom: 2.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 13uL MM into each PCR tube
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 13
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 1.5
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: G1-G6
  dispense_flowRate: 3.7
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL of Samp
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: D1-D6
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 20
  aspirate_delay_seconds: 3
  aspirate_flowRate: 20
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: G1-G6
  dispense_flowRate: 20
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -10
  dropTip_location: trashBin
  preWetTip: true
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Place PCR tubes with gDNA and sample mixtures onto the 42C heat block for 2 minutes and then place on ice. In the meantime, start the next portion of the protocol.
- stepType: moveLiquid
  stepName: 8uL RTase
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 8
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A3
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A2
  dispense_flowRate: 3.7
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 40uL Premix RT Buffer + RT Primer
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 40
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A4
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A2
  dropTip_location: trashBin
- stepType: mix
  stepName: Mixing RT MM
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 35
  times: 10
  changeTip: always
  labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  wells: A2
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  aspirate_flowRate: 46.4
  mix_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Remove PCR tubes from ice and place into individual PCR plate holder.
- stepType: moveLiquid
  stepName: 6uL RT MM into gDNA Wipeout
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 6
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: G1-G6
  dispense_flowRate: 20
  dispense_mix_checkbox: true
  dispense_mix_times: 6
  dispense_mix_volume: 15
  dispense_mmFromBottom: 1.5
  blowout_checkbox: true
  blowout_flowRate: 10
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Place PCR tubes with RTase and sample mixture on the 42C heatblock for 15 minutes and then place on the 95C heatblock for 3 minutes, and then place on ice. Remove gDNA wipeout (A1), RTase (A3), Premix RT (A4) and place into freezer. Once ready, load primers into machine.
- stepType: moveLiquid
  stepName: 240uL 2x SYBR Green MM
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 240
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A6
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  aspirate_flowRate: 77
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A3-A5
  dispense_flowRate: 200
  dispense_mmFromBottom: 3
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 48uL Proprietary Forward Primer
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 48
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: B1, B2
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 3
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A3, A4
  dispense_flowRate: 46.4
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 40
  dispense_mmFromBottom: 3
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 2.8uL of 100uM Forward Primer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 2.8
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: B3
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A5
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dispense_mmFromBottom: 3
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 168uL RNAse Free H2O
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 168
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A2
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A3, A4
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 100
  dispense_mmFromBottom: 3
  blowout_checkbox: true
  blowout_flowRate: 46.43
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 206.8uL RNAse Free H2O
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 206.8
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A2
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A5
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 100
  dispense_mmFromBottom: 3
  blowout_checkbox: true
  blowout_flowRate: 46.43
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 19uL PCR 1 MM
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 19
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
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  aspirate_flowRate: 12
  aspirate_mmFromBottom: 1.5
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-F1, A2-F2, A3-F3
  dispense_flowRate: 12
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 19uL PCR 2 MM
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 19
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A4
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  aspirate_flowRate: 12
  aspirate_mmFromBottom: 1.5
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A4-F4, A5-F5, A6-F6
  dispense_flowRate: 12
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 19uL PCR 3 MM
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 19
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A5
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  aspirate_flowRate: 12
  aspirate_mmFromBottom: 1.5
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A7-F7, A8-F8, A9-F9
  dispense_flowRate: 12
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 1uL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G1
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-A9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G2
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B1-B9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G3
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C1-C9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G4
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: D1-D9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G5
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: E1-E9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G6
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: F1-F9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
labwareDefinitions:
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  custom_beta/individualpcrtubes_96_wellplate_200ul/1:
    brand: {brand: Individual PCR Tubes, brandId: []}
    metadata: {displayName: Individual PCR Tubes 96 Well Plate 200 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 21.06}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: individualpcrtubes_96_wellplate_200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 20, totalLiquidVolume: 200, shape: circular, diameter: 5.46, x: 14.38, y: 74.24, z: 1.06}
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  custom_beta/opentrons_24_tall_tubes/1:
    brand: {brand: Opentrons, brandId: []}
    metadata: {displayName: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, displayCategory: tubeRack, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.75, yDimension: 85.5, zDimension: 45}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: opentrons_24_tall_tubes}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 44, totalLiquidVolume: 1500, shape: circular, diameter: 8, x: 18.21, y: 75.43, z: 1}
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons OT-2 96 Filter Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 16, labwareId: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2.5, x: 0, y: 0}}, flowRate: 10}
- dispense: {pipetteId: p20_single_gen2, volume: 16, labwareId: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2.5, x: 0, y: 0}}, flowRate: 3.7}
- moveToAddressableAreaForDropTip: {pipetteId: p20_single_gen2, addressableAreaName: fixedTrash, offset: {x: 0, y: 0, z: 0}, alternateDropLocation: true}
- dropTipInPlace: {pipetteId: p20_single_gen2}
- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons OT-2 96 Filter Tip Rack 200 µL, wellName: A1}
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