opentrons/protocol-designer 8.4.4
schemaVersion: 8
protocolName: 070325 1 3 Primers Serial Dilution RT PCR TVasse
author: Tyler Vasse
robot: {model: OT-2 Standard, deckId: ot2_standard}
pipettes:
  p300_single_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labware:
  Opentrons OT-2 96 Filter Tip Rack 200 µL: {labwareDefURI: opentrons/opentrons_96_filtertiprack_200ul/1, location: 9}
  Opentrons OT-2 96 Filter Tip Rack 20 µL: {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 8}
  Bio-Rad 96 Well Plate 200 µL PCR: {labwareDefURI: opentrons/biorad_96_wellplate_200ul_pcr/2, location: 2}
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap: {labwareDefURI: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, location: 5}
  Individual PCR Tubes 96 Well Plate 200 µL: {labwareDefURI: custom_beta/individualpcrtubes_96_wellplate_200ul/1, location: 1}
  Opentrons 24 Tube Rack with 1.5mL Primer Tubes: {labwareDefURI: custom_beta/opentrons_24_primer_tubes/1, location: 6}
  Opentrons 24 Tube Rack with 1.5mL Tall Tubes: {labwareDefURI: custom_beta/opentrons_24_tall_tubes/1, location: 4}
  Opentrons OT-2 96 Filter Tip Rack 20 µL (1): {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 11}
trashBinLocationUpdate:
  trashBin: cutout12
pipetteTiprackAssignments:
  p300_single_gen2: [opentrons/opentrons_96_filtertiprack_200ul/1]
  p20_single_gen2: [opentrons/opentrons_96_filtertiprack_20ul/1]
ingredients:
  - 5x miRCURY
  - PCR Grade Water
  - 10x miRCURY
  - Uni-Sp6
  - miRNA 100uM
  - 2x miRCURY
  - U6 primer mix
  - primer mix 2
  - Sample
ingredLocations:
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap:
    Sample {volume: 50}: A1
  Opentrons 24 Tube Rack with 1.5mL Primer Tubes:
    U6 primer mix {volume: 50}: A1
    primer mix 2 {volume: 50}: A2, A3
  Opentrons 24 Tube Rack with 1.5mL Tall Tubes:
    PCR Grade Water {volume: 1500}: A1, A3
    5x miRCURY {volume: 100}: A2
    10x miRCURY {volume: 100}: A4
    Uni-Sp6 {volume: 100}: A5
    2x miRCURY {volume: 1000}: C1
savedStepForms:
- stepType: moveLiquid
  stepName: (33 min until pause) 90uL H2O into Dilutions
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 90
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A1
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 2
  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A1-A10, A12
  dispense_flowRate: 46.4
  dispense_mmFromBottom: 2.5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: Making 10uM Dilution
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 37.7
  aspirate_delay_seconds: 3
  aspirate_flowRate: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A1
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 10uM Dilution
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 50
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: A1
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 4
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Making 1uM Dilution
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: A1
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 10
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A2
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 1uM Dilution
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 50
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: A2
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 4
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Making 100nM Dilution
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: A2
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 10
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A3
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 100nM Dilution
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 50
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: A3
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 4
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Making 10nM Dilution
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: A3
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 10
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A4
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 10nM Dilution
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 50
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: A4
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 4
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Making 1nM Dilution
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: A4
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 10
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A5
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 1nM Dilution
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 50
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: A5
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 4
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Making 100pM Dilution
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: A5
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 10
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A6
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 100pM Dilution
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 50
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: A6
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 4
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Making 10pM Dilution
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: A6
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 10
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A7
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 10pM Dilution
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 50
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: A7
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 4
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Making 1pM Dilution
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: A7
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 10
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A8
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 1pM Dilution
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 50
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: A8
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 4
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Making 100fM Dilution
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: A8
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 10
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 100fM Dilution
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 50
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: A9
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 4
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Making 10fM Dilution
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: A9
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 10
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: A10
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 10fM Dilution
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 50
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: A10
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 4
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 14uL 5x miRCURY into RT MM
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 14
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A2
  dispense_flowRate: 3.7
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 38.5uL H2O into RT MM
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 38.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A3
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 2
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A2
  dispense_flowRate: 46.4
  blowout_checkbox: true
  blowout_flowRate: 46.43
  blowout_location: dest_well
  blowout_z_offset: -10
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 17uL 10x miRCURY into RT MM
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 17
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A4
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A2
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 20
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 3.5uL U6 into RT MM
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 3.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A5
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A2
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing RT MM
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 40
  times: 12
  changeTip: always
  labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  wells: A2
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  aspirate_flowRate: 200
  dispense_flowRate: 200
  mix_mmFromBottom: 2
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 9uL RT MM Transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 9
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: D6-D10, D12
  dispense_flowRate: 3.7
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL miR Dilution Transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: A6-A10, A12
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 20
  aspirate_mmFromBottom: 1.6
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: D6-D10, D12
  dispense_flowRate: 20
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 7
  dispense_mmFromBottom: 1
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -10
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing 9:1 RT Mixture
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: D6-D10, D12
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  aspirate_flowRate: 15
  dispense_flowRate: 15
  mix_mmFromBottom: 1
  blowout_checkbox: true
  blowout_flowRate: 5
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Load 2x miRCURY and primer mixes, Place row 4 samples onto 42C 60mins, 95C 5mins 
    
    (Set 5 mins timer until next pause) 
- stepType: moveLiquid
  stepName: 360uL 2x miRCURY into Sol1
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 360
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: C1
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: B1
  dispense_flowRate: 46.4
  dispense_mmFromBottom: 5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 72uL H2O into Sol1 and Mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 72
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A3
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  aspirate_flowRate: 300
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: B1
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 7
  dispense_mix_volume: 60
  dispense_mmFromBottom: 5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 126uL Sol1 into Sol2s
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 126
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B1
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 1.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: B2-B4
  dispense_flowRate: 46.4
  dispense_mmFromBottom: 2
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 21uL U6 primer into U6 Sol2
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 21
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Primer Tubes
  aspirate_wells: A1
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 1.6
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: B2
  dispense_flowRate: 46.4
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 40
  dispense_mmFromBottom: 2
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 21uL miR primer into miR Sol2
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 21
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Primer Tubes
  aspirate_wells: A2
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 1.6
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: B3
  dispense_flowRate: 46.4
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 40
  dispense_mmFromBottom: 2
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 21uL miR primer into miR Sol2
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 21
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Primer Tubes
  aspirate_wells: A3
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 1.6
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: B4
  dispense_flowRate: 46.4
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 40
  dispense_mmFromBottom: 2
  dropTip_location: trashBin
  preWetTip: true
- stepType: mix
  stepName: Mixing Sol2s
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 100
  times: 10
  changeTip: always
  labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  wells: B2-B4
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  aspirate_flowRate: 100
  dispense_flowRate: 100
  mix_mmFromBottom: 1.2
  dropTip_location: trashBin
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Please load RT cDNA, 12 min timer until next pause
- stepType: moveLiquid
  stepName: 118uL H2O into 1:60 Dilutions
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 118
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A3
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 2.5
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: G6-G10, G12
  dispense_flowRate: 46.4
  dispense_mmFromBottom: 2.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 2uL RT product into 1:60 Dilutions
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: D6-D10, D12
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 19.9
  aspirate_delay_seconds: 3
  aspirate_flowRate: 4
  aspirate_mmFromBottom: 0.5
  dispense_labware: Individual PCR Tubes 96 Well Plate 200 µL
  dispense_wells: G6-G10, G12
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -3
  dropTip_location: trashBin
- stepType: mix
  stepName: Mixing 1:60 Dilutions
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 100
  times: 10
  changeTip: always
  labware: Individual PCR Tubes 96 Well Plate 200 µL
  wells: G6-G10, G12
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  aspirate_flowRate: 250
  dispense_flowRate: 250
  mix_mmFromBottom: 4
  blowout_checkbox: true
  blowout_flowRate: 46.43
  blowout_location: dest_well
  blowout_z_offset: -1
  dropTip_location: trashBin
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Please load plate, 40 min timer until finished
- stepType: moveLiquid
  stepName: 7uL U6 Sol2 into plate
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 0.8
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-F1, A2-F2, A3-F3
  dispense_flowRate: 3.7
  blowout_checkbox: true
  blowout_flowRate: 15
  blowout_location: dest_well
  blowout_z_offset: -7
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 7uL miR Sol2 into Plate
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B3
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 0.8
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A4-F4, A5-F5, A6-F6
  dispense_flowRate: 3.7
  blowout_checkbox: true
  blowout_flowRate: 15
  blowout_location: dest_well
  blowout_z_offset: -7
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 7uL miR Sol2 into Plate
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B4
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 0.8
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A7-F7, A8-F8, A9-F9
  dispense_flowRate: 3.7
  blowout_checkbox: true
  blowout_flowRate: 15
  blowout_location: dest_well
  blowout_z_offset: -7
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 3uL Sample 1 1:60 Dilution into Plate and Mix
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G6
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-A9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 3uL Sample 2 1:60 Dilution into Plate and Mix
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G7
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B1-B9
  dispense_flowRate: 3.7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 3uL Sample 3 1:60 Dilution into Plate and Mix
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G8
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C1-C9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 3uL Sample 4 1:60 Dilution into Plate and Mix
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G9
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: D1-D9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 3uL Sample 5 1:60 Dilution into Plate and Mix
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G10
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: E1-E9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 3uL Sample 6 1:60 Dilution into Plate and Mix
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: G12
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  aspirate_flowRate: 6
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: F1-F9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
labwareDefinitions:
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  custom_beta/individualpcrtubes_96_wellplate_200ul/1:
    brand: {brand: Individual PCR Tubes, brandId: []}
    metadata: {displayName: Individual PCR Tubes 96 Well Plate 200 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 21.06}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: individualpcrtubes_96_wellplate_200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 20, totalLiquidVolume: 200, shape: circular, diameter: 5.46, x: 14.38, y: 74.24, z: 1.06}
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  custom_beta/opentrons_24_primer_tubes/1:
    brand: {brand: Opentrons, brandId: []}
    metadata: {displayName: Opentrons 24 Tube Rack with 1.5mL Primer Tubes, displayCategory: tubeRack, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.75, yDimension: 85.5, zDimension: 48}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: opentrons_24_primer_tubes}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 47, totalLiquidVolume: 1500, shape: circular, diameter: 8, x: 18.21, y: 75.43, z: 1}
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  custom_beta/opentrons_24_tall_tubes/1:
    brand: {brand: Opentrons, brandId: []}
    metadata: {displayName: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, displayCategory: tubeRack, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.75, yDimension: 85.5, zDimension: 45}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: opentrons_24_tall_tubes}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 44, totalLiquidVolume: 1500, shape: circular, diameter: 8, x: 18.21, y: 75.43, z: 1}
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commands:
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- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons OT-2 96 Filter Tip Rack 200 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 90, labwareId: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2, x: 0, y: 0}}, flowRate: 46.4}
- dispense: {pipetteId: p300_single_gen2, volume: 90, labwareId: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2, x: 0, y: 0}}, flowRate: 46.4}
- aspirate: {pipetteId: p300_single_gen2, volume: 90, labwareId: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2, x: 0, y: 0}}, flowRate: 46.4}
- dispense: {pipetteId: p300_single_gen2, volume: 90, labwareId: Individual PCR Tubes 96 Well Plate 200 µL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2.5, x: 0, y: 0}}, flowRate: 46.4}
- aspirate: {pipetteId: p300_single_gen2, volume: 90, labwareId: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2, x: 0, y: 0}}, flowRate: 46.4}
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